PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tarea_iceberg
  keyboardBackend = ioHub
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Routines
  Routine control
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    MovieComponent movie
      backend = ffpyplayer
      forceEndRoutine = False
      movie = imgs/video_mar.mp4
      size = (1.8, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
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    ImageComponent image
      image [set every repeat] = imgs/iceberg.png
      pos [set every repeat] = $[posx, posy]
      size = (0.35, 0.35)
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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  Routine music
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    MovieComponent movie_2
      backend = ffpyplayer
      forceEndRoutine = False
      movie = imgs/video_mar.mp4
      size = (1.8, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
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    ImageComponent image_2
      image [set every repeat] = imgs/iceberg.png
      pos [set every repeat] = $[posx, posy]
      size = (0.35, 0.35)
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #background_sound = visual.MovieStim('imgs/song_titanic.mp4')
        #background_sound = sound.Sound('imgs/song_titanic.mp4')
        #myMovie.movie = 'imgs/song_titanic.mp4'

        background_sound = visual.MovieStim3(
            win=win,                        # Ventana en la que se va a mostrar el video
            filename='imgs/song_titanic.mp4', # Ruta al archivo de video
            size=(20, 20),               # Tamaño del video (opcional)
            pos=(0,0),
            flipVert=False,                 # Si se debe voltear verticalmente
            flipHoriz=False,                # Si se debe voltear horizontalmente
            loop=False                      # Si el video debe repetirse
        )
      Begin Routine:
        if trials_2.thisN == 0:
            background_sound.play()
            #background_sound.pos(0,0)
            #background_sound.size(0.1, 0.1)
      End Routine:
        if trials_2.thisN == 1:
            background_sound.stop()
  Routine music_words
    MovieComponent movie_3
      backend = ffpyplayer
      forceEndRoutine = False
      movie = imgs/video_mar.mp4
      size = (1.8, 1.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 18
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    ImageComponent image_3
      image [set every repeat] = imgs/iceberg.png
      pos [set every repeat] = $[posx, posy]
      size = (0.35, 0.35)
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        #background_sound = visual.MovieStim('imgs/song_titanic.mp4')
        #background_sound = sound.Sound('imgs/song_titanic.mp4')
        #myMovie.movie = 'imgs/song_titanic.mp4'

        background_movie = visual.MovieStim3(
            win=win,                        # Ventana en la que se va a mostrar el video
            filename='imgs/video_celine.mp4', # Ruta al archivo de video
            size=(1000,1000),               # Tamaño del video (opcional)
            pos=(0,0),
            flipVert=False,                 # Si se debe voltear verticalmente
            flipHoriz=False,                # Si se debe voltear horizontalmente
            loop=False                      # Si el video debe repetirse
        )
      Begin Routine:
        if trials_3.thisN == 0:
            background_movie.play()
            background_movie.draw()
            #background_sound.pos(0,0)
            #background_sound.size(0.1, 0.1)
      Each Frame:
        background_movie.draw()
      End Routine:
        if trials_3.thisN == 8:
            background_movie.stop()
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = $timepresentation
      stopVal [duration (s)] = 15
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  Routine instructions2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = ¡Empezamos la segunda ronda!
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  Routine instructions3
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = ¡empezamos la tercera ronda!
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  Routine videonotworking
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    CodeComponent code_X
      Code Type = Auto->JS
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      Begin Experiment:
        #background_sound = visual.MovieStim('imgs/song_titanic.mp4')
        #background_sound = sound.Sound('imgs/song_titanic.mp4')
        #myMovie.movie = 'imgs/song_titanic.mp4'

        background_movie2 = visual.MovieStim3(
            win=win,                        # Ventana en la que se va a mostrar el video
            filename='imgs/video_celine.mp4', # Ruta al archivo de video
            size=(1000, 1000),               # Tamaño del video (opcional)
            pos=(0,0),
            flipVert=False,                 # Si se debe voltear verticalmente
            flipHoriz=False,                # Si se debe voltear horizontalmente
            loop=False                      # Si el video debe repetirse
        )
      Begin Routine:
        if trials_4.thisN == 0:
            background_movie2.play()
            background_movie2.draw()
            #background_sound.pos(0,0)
            #background_sound.size(0.1, 0.1)
      Each Frame:
        background_movie2.draw()
      End Routine:
        if trials_4.thisN == 1:
            background_movie2.stop()
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = imgs/trials_fake.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'timepresentation': 2, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 2, 'posx': -0.7, 'posy': 0.15}]
    Routine control
  LoopTerminator trials
  Routine instructions2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = imgs/trials_fake.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'timepresentation': 2, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 2, 'posx': -0.7, 'posy': 0.15}]
    Routine music
  LoopTerminator trials_2
  Routine instructions3
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = imgs/trials_iceberg_3.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'timepresentation': 13, 'posx': -0.8, 'posy': 0.15},
      {'timepresentation': 6, 'posx': -0.7, 'posy': 0.15},
      {'timepresentation': 5, 'posx': -0.6, 'posy': 0.15},
      {'timepresentation': 10, 'posx': -0.5, 'posy': 0.15},
      {'timepresentation': 8, 'posx': 0.5, 'posy': 0.1},
      {'timepresentation': 14, 'posx': 0.6, 'posy': 0.1},
      {'timepresentation': 7, 'posx': 0.7, 'posy': 0.1},
      {'timepresentation': 12, 'posx': 0.8, 'posy': 0.1}]
    Routine music_words
  LoopTerminator trials_3
